PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = MusicAffectPsychophysiology2019
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Routines
  Routine music
    SoundComponent playsong
      sound [set every repeat] = $song
      startVal [time (s)] = 0.0
      volume = 2
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    CodeComponent mark
      Code Type = Py
      Begin Routine:
        ser.write(b'01')
  Routine valence
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      scaleDescription = How pleasant did the song make you feel, where 0 = very unpleasant and 1 = very pleasant
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
      visualAnalogScale = True
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  Routine arousal
    RatingScaleComponent arousalrating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      scaleDescription = How pleasant did the song make you feel, where 0 = very unaroused and 1 = very aroused
      size = 1.0
      startVal [time (s)] = 0.0
      visualAnalogScale = True
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  Routine image
  Routine instru
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You are about to listen to a series of songs. After listening to each song you will be asked to make judgements about how the song made you feel in terms of pleasantness and arousal (energy/awakeness).

        First, you will complete a practice trial so you can get an understanding of what you will be doing in the experiment

        Please press any key to continue
    KeyboardComponent begin
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracMusic
    SoundComponent sound_1
      sound = prac.wav
      startVal [time (s)] = 0.0
      volume = 2
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    CodeComponent PracMark
      Code Type = Py
      Begin Experiment:
        import serial
        ser = serial.Serial(port = "/dev/tty.usbserial-00001114",
                            baudrate = 115200,
                            timeout=1)
      Begin Routine:
        ser.write('01'.encode())
      End Experiment:
        ser.close()
      End Routine:
        ser.write("00".encode())
  Routine beginstudy
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now that the practice is finished the experiment will begin. This will take about 15 minutes. You will be told by the program when the experiment is over

        Press any key to begin the study
    KeyboardComponent advance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent MusicEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        All the music has now been listened to. Please click on the following link to fill out some final questions.

        Press any key to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instru
  Routine PracMusic
  Routine valence
  Routine arousal
  Routine beginstudy
  LoopInitiator songtrials loopType="TrialHandler"
    conditionsFile = Music.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('song', '30MonoOGG/30MonoF1.ogg'), ('valence', 1), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoF2.ogg'), ('valence', 1), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoF3.ogg'), ('valence', 1), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoF4.ogg'), ('valence', 1), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoH1.ogg'), ('valence', 2), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoH2.ogg'), ('valence', 2), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoH3.ogg'), ('valence', 2), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoH4.ogg'), ('valence', 2), ('arousal', 2)]),
      OrderedDict([('song', '30MonoOGG/30MonoS1.ogg'), ('valence', 1), ('arousal', 1)]),
      OrderedDict([('song', '30MonoOGG/30MonoS2.ogg'), ('valence', 1), ('arousal', 1)]),
      OrderedDict([('song', '30MonoOGG/30MonoS3.ogg'), ('valence', 1), ('arousal', 1)]),
      OrderedDict([('song', '30MonoOGG/30MonoS4.ogg'), ('valence', 1), ('arousal', 1)]),
      OrderedDict([('song', '30MonoOGG/30MonoT1.ogg'), ('valence', 2), ('arousal', 1)]),
      OrderedDict([('song', '30MonoOGG/30MonoT2.ogg'), ('valence', 2), ('arousal', 1)]),
      OrderedDict([('song', '30MonoOGG/30MonoT3.ogg'), ('valence', 2), ('arousal', 1)]),
      OrderedDict([('song', '30MonoOGG/30MonoT4.ogg'), ('valence', 2), ('arousal', 1)])]
    Routine music
    Routine valence
    Routine arousal
  LoopTerminator songtrials
  Routine end
